PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = confidence
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent text_Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Welcome
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    TextComponent text_Instructions
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        Instructions

        Press SPACE to continue
    KeyboardComponent key_resp_complete
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine memory
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    TextComponent text_instruct_memory
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Write down the words you just saw
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    TextboxComponent textbox_word1
      bold = False
      borderColor = white
      borderWidth = 0.5
      editable = True
      letterHeight = 0.04
      lineSpacing = 0.5
      placeholder = Type the first word here...
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
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    TextboxComponent textbox_word2
      bold = False
      borderColor = white
      borderWidth = 0.5
      editable = True
      letterHeight = 0.04
      lineSpacing = 0.5
      placeholder = Type second word here...
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
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    TextboxComponent textbox_word3
      bold = False
      borderColor = white
      borderWidth = 0.5
      editable = True
      letterHeight = 0.04
      lineSpacing = 0.5
      placeholder = Type second word here...
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
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    ButtonComponent button
      bold = True
      borderColor = 0.0000, 0.0000, 0.0000
      fillColor = darkgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Done
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    TextComponent text_button
      letterHeight = 0.05
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      text = Done
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  Routine train
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    CodeComponent code
      Code Type = Both
      Before Experiment:
        feature1 = ["Red", "Blue", "Green", "Yellow", "Orange", "Pink",
        "Black"];
        shuffle(feature1)

        feature2 = [1,2,3,4,5,6,7]
        shuffle(feature2)

        feature3 = ['e','f','g','h','i','j','k']
        shuffle(feature3)

        feature4 = ['!', '@', '#', '$', '%', '^', '&']
        shuffle(feature4)
      Before JS Experiment:
        let feature1 = ["Red", "Blue", "Green", "Yellow", "Orange", "Pink",
        "Black"];

        util.shuffle(feature1)

        let feature2 = [1, 2, 3, 4, 5, 6, 7];
        util.shuffle(feature2)

        let feature3 = ["e", "f", "g", "h", "i", "j", "k"];
        util.shuffle(feature3)

        let feature4 = ['!', '@', '#', '$', '%', '^', '&'];
        util.shuffle(feature4)
      Begin Experiment:
        iter_train = -1
      Begin JS Experiment:
        iter_train = (- 1);
      Begin JS Routine:
        iter_train = (iter_train + 1);

        psychoJS.experiment.addData('psuedoword_train', word_list[iter_train]);
        psychoJS.experiment.addData('feature1', feature1[iter_train]);
        psychoJS.experiment.addData('feature2', feature2[iter_train]);
        psychoJS.experiment.addData('feature3', feature3[iter_train]);
        psychoJS.experiment.addData('feature4', feature4[iter_train]);
      Begin Routine:
        iter_train = iter_train +1

        # store data
        thisExp.addData('psuedoword_train', word_list[iter_train])
        thisExp.addData('feature1', feature1[iter_train])
        thisExp.addData('feature2', feature2[iter_train])
        thisExp.addData('feature3', feature3[iter_train])
        thisExp.addData('feature4', feature4[iter_train])
    TextComponent text_psuedowords
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word_list[iter_train]
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    TextComponent text_f1
      color [set every repeat] = $feature1[iter_train]
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feature1[iter_train]
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    TextComponent text_f2
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feature2[iter_train]
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    TextComponent text_f3
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feature3[iter_train]
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    TextComponent text_f4
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feature4[iter_train]
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  Routine psuedowords
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    CodeComponent code_wordlist
      Code Type = Both
      Before Experiment:
        import random

        # list of psuedowords - LEVER
        word_list = ['psythos','addaign', 'gyepset', 'oppasms','ridaps','sclueeze',
        'addlaim']
        random.shuffle(word_list)

        # list of repititions - LEVER
        rep_times = [1,2,3,4,5,5,7]
        random.shuffle(rep_times)

        # WW is a list of first psuedowords each repeated n times, and so on.
        WW = []
        W_train = []
        for i in range(len(word_list)):
            WW.extend([word_list[i]] * rep_times[i])
            W_train.extend([word_list[i]] * rep_times[i])

        combined = list(zip(WW, W_train))
        random.shuffle(combined)
        WW, W_train = zip(*combined)
        WW = list(WW)
        W_train = list(W_train)   # psuedoword list for tarining phase
        len_W_train = len(W_train)

        #----------------------------

        # Familiarity pseudowords
        psuedo_lists = []
        list_size = 3         # how many pseudowords in a trial - LEVER

        # number of trials = total num words/ num words in one trial
        num_new_lists = len(WW)/list_size

        # make 'unique' (no repeat) list of words from WW into 'psuedo_lists'
        while len(WW) >= list_size:

              first_elem = random.choice(WW)
              WW.remove(first_elem)

              second_elem = random.choice(WW)
              while second_elem == first_elem:
                  second_elem = random.choice(WW)
              WW.remove(second_elem)

              third_elem = random.choice(WW)
              while third_elem == first_elem or third_elem ==second_elem:
                  third_elem = random.choice(WW)
              WW.remove(third_elem)

              psuedo_lists.append([first_elem, second_elem,third_elem])

        #-------------------------
        len_trials = len(psuedo_lists)        # familiarity trials total
        len_assoc_trials = len(word_list)    # association

        print(psuedo_lists)
      Before JS Experiment:
        let word_list = ['psythos','addaign', 'gyepset', 'oppasms','ridaps','sclueeze',
        'addlaim'];
        util.shuffle(word_list)

        let rep_times = [1,2,3,4,5,5,7];
        util.shuffle(rep_times)

        let WW = [];
        let W_train = [];

        for (let i = 0; i < word_list.length; i++) {
          for (let j = 0; j < rep_times[i]; j++) {
            WW.push(word_list[i]);
            W_train.push(word_list[i]);
          }
        }

        let combined = WW.map((item, i) => [item, W_train[i]]);
        util.shuffle(combined)

        WW = combined.map(item => item[0]);
        W_train = combined.map(item => item[1]);

        let len_W_train = W_train.length;

        //----------------------------

        let psuedo_lists = [];
        let list_size = 3;


        let num_new_lists = Math.floor(WW.length / list_size);


        while (WW.length >= list_size+5) {
            let first_elem = WW.splice(Math.floor(Math.random()*WW.length), 1)[0];

            let second_elem = WW.splice(Math.floor(Math.random()*WW.length), 1)[0];
            while (second_elem === first_elem) {
                second_elem = WW.splice(Math.floor(Math.random()*WW.length), 1)[0];
            }
            let third_elem = WW.splice(Math.floor(Math.random()*WW.length), 1)[0];
            while (third_elem === first_elem || third_elem===second_elem) {
                third_elem = WW.splice(Math.floor(Math.random()*WW.length), 1)[0];
            }

            psuedo_lists.push([first_elem, second_elem,third_elem]);
            }

        let len_trials = psuedo_lists.length;
        let len_assoc_trials = word_list.length;

        console.log(psuedo_lists);
      Begin Experiment:
        iter = -1
      Begin JS Experiment:
        iter = (- 1);
      Begin JS Routine:
        // store the trial word list into separate words
        iter = (iter + 1);

        let psuedoword1 = psuedo_lists[iter][0];
        let psuedoword2 = psuedo_lists[iter][1];
        let psuedoword3 = psuedo_lists[iter][2];

        // store data
        psychoJS.experiment.addData("psuedoword1", psuedoword1);
        psychoJS.experiment.addData("psuedoword2", psuedoword2);
        psychoJS.experiment.addData("psuedoword3", psuedoword3);
      Begin Routine:
        # store the trial word list into separate words
        iter = iter + 1
        psuedoword1, psuedoword2, psuedoword3 = psuedo_lists[iter]



        # store data
        thisExp.addData('psuedoword1', psuedoword1)
        thisExp.addData('psuedoword2', psuedoword2)
        thisExp.addData('psuedoword3', psuedoword3)
    TextComponent text_psuedoword1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $psuedoword1
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    TextComponent text_psuedoword2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $psuedoword2
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    TextComponent text_psuedoword3
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $psuedoword3
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    TextComponent text_delay
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
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  Routine test
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    CodeComponent code_test
      Code Type = Both
      Begin Experiment:
        iter_test = -1
      Begin JS Experiment:
        iter_test = (- 1);
      Begin JS Routine:
        iter_test = (iter_test + 1);

        psychoJS.experiment.addData("psuedoword_test", word_list[iter_test]);
      Begin Routine:
        iter_test = iter_test +1

        # store data
        thisExp.addData('psuedoword_test', word_list[iter_test])
    TextComponent text_test
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $word_list[iter_test]
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    TextboxComponent textbox_f1
      bold = False
      borderColor = white
      borderWidth = 0.5
      editable = True
      letterHeight = 0.04
      lineSpacing = 0.5
      placeholder = feature 1
      pos = (-0.55, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
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    TextboxComponent textbox_f2
      bold = False
      borderColor = white
      borderWidth = 0.5
      editable = True
      letterHeight = 0.04
      lineSpacing = 0.5
      placeholder = feature 2
      pos = (-0.2, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
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    TextboxComponent textbox_f3
      bold = False
      borderColor = white
      borderWidth = 0.5
      editable = True
      letterHeight = 0.04
      lineSpacing = 0.5
      placeholder = feature 3
      pos = (0.2, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
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    TextboxComponent textbox_f4
      bold = False
      borderColor = white
      borderWidth = 0.5
      editable = True
      letterHeight = 0.04
      lineSpacing = 0.5
      placeholder = feature 4
      pos = (0.55, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
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    ButtonComponent button_2
      bold = True
      borderColor = 0.0000, 0.0000, 0.0000
      fillColor = darkgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Done
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    TextComponent text_button_2
      letterHeight = 0.05
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      text = Done
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  Routine delay
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Finished

        Press SPACE to end.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_Instruct
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    TextComponent text_Inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Write down the features associated with these words
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = len_trials
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    Routine psuedowords
    Routine memory
  LoopTerminator trials
  LoopInitiator loop_train loopType="TrialHandler"
    loopType = random
    nReps = len_assoc_trials
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    Routine train
  LoopTerminator loop_train
  Routine test_Instruct
  LoopInitiator loop_test loopType="TrialHandler"
    loopType = random
    nReps = len_assoc_trials
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    Routine test
    Routine delay
  LoopTerminator loop_test
  Routine end
